proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend[126]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  connect dend[6](0), dend[1](1)
  connect dend[7](0), dend(1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  for i = 12, 14 connect dend[i](0), dend[11](1)
  for i = 15, 16 connect dend[i](0), dend[i-1](1)
  for i = 17, 18 connect dend[i](0), dend[15](1)
  connect dend[19](0), dend[18](1)
  connect dend[20](0), dend[14](1)
  for i = 21, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  connect dend[28](0), dend[22](1)
  connect dend[29](0), dend[21](1)
  for i = 30, 32 connect dend[i](0), dend[29](1)
  connect dend[33](0), soma(0.5)
  for i = 34, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  connect dend[37](0), dend[36](1)
  connect dend[38](0), dend[33](1)
  connect dend[39](0), soma(0.5)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  for i = 42, 43 connect dend[i](0), dend[41](1)
  for i = 44, 45 connect dend[i](0), soma(0.5)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  for i = 48, 49 connect dend[i](0), soma(0.5)
  for i = 50, 63 connect dend[i](0), dend[i-1](1)
  connect dend[64](0), dend[62](1)
  connect dend[65](0), dend[61](1)
  connect dend[66](0), dend[60](1)
  for i = 67, 68 connect dend[i](0), dend[i-1](1)
  connect dend[69](0), dend[67](1)
  connect dend[70](0), dend[66](1)
  connect dend[71](0), dend[59](1)
  for i = 72, 73 connect dend[i](0), dend[71](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  connect dend[76](0), dend[58](1)
  connect dend[77](0), dend[57](1)
  connect dend[78](0), dend[56](1)
  connect dend[79](0), dend[55](1)
  connect dend[80](0), dend[54](1)
  connect dend[81](0), dend[53](1)
  for i = 82, 83 connect dend[i](0), dend[i-1](1)
  connect dend[84](0), dend[82](1)
  for i = 85, 86 connect dend[i](0), dend[84](1)
  for i = 87, 88 connect dend[i](0), dend[86](1)
  for i = 89, 90 connect dend[i](0), dend[i-1](1)
  connect dend[91](0), dend[89](1)
  for i = 92, 94 connect dend[i](0), dend[i-1](1)
  connect dend[95](0), dend[93](1)
  connect dend[96](0), dend[92](1)
  connect dend[97](0), dend[91](1)
  connect dend[98](0), dend[88](1)
  for i = 99, 100 connect dend[i](0), dend[i-1](1)
  connect dend[101](0), dend[99](1)
  connect dend[102](0), dend[98](1)
  connect dend[103](0), dend[81](1)
  for i = 104, 106 connect dend[i](0), dend[i-1](1)
  for i = 107, 108 connect dend[i](0), dend[105](1)
  connect dend[109](0), dend[103](1)
  connect dend[110](0), dend[52](1)
  connect dend[111](0), dend[51](1)
  connect dend[112](0), dend[50](1)
  for i = 113, 115 connect dend[i](0), dend[i-1](1)
  connect dend[116](0), dend[114](1)
  for i = 117, 119 connect dend[i](0), dend[116](1)
  connect dend[120](0), dend[113](1)
  connect dend[121](0), dend[112](1)
  connect dend[122](0), dend[49](1)
  connect dend[123](0), dend[24](1)
  connect dend[124](0), dend[51](1)
  connect dend[125](0), dend[124](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(271.823, 334.848, -8.70909, 8.94976)
	pt3dadd(273.078, 340.597, -8.22015, 14.6064)
	pt3dadd(274.334, 346.347, -7.7312, 20.2858)
	pt3dadd(275.589, 352.097, -7.24225, 25.1465)
	pt3dadd(276.845, 357.847, -6.7533, 32.3824)
	pt3dadd(278.1, 363.596, -6.26436, 37.8782)
	pt3dadd(279.356, 369.346, -5.77541, 39.6592)
	pt3dadd(280.611, 375.096, -5.28646, 42.0896)
	pt3dadd(281.867, 380.846, -4.79752, 43.5279)
	pt3dadd(283.123, 386.595, -4.30857, 46.1742)
	pt3dadd(284.378, 392.345, -3.81962, 47.9088)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
  shape3d_72()
  shape3d_73()
  shape3d_74()
  shape3d_75()
  shape3d_76()
  shape3d_77()
  shape3d_78()
  shape3d_79()
  shape3d_80()
  shape3d_81()
  shape3d_82()
  shape3d_83()
  shape3d_84()
  shape3d_85()
  shape3d_86()
  shape3d_87()
  shape3d_88()
  shape3d_89()
  shape3d_90()
  shape3d_91()
  shape3d_92()
  shape3d_93()
  shape3d_94()
  shape3d_95()
  shape3d_96()
  shape3d_97()
  shape3d_98()
  shape3d_99()
  shape3d_100()
  shape3d_101()
  shape3d_102()
  shape3d_103()
  shape3d_104()
  shape3d_105()
  shape3d_106()
  shape3d_107()
  shape3d_108()
  shape3d_109()
  shape3d_110()
  shape3d_111()
  shape3d_112()
  shape3d_113()
  shape3d_114()
  shape3d_115()
  shape3d_116()
  shape3d_117()
  shape3d_118()
  shape3d_119()
  shape3d_120()
  shape3d_121()
  shape3d_122()
  shape3d_123()
  shape3d_124()
  shape3d_125()
  shape3d_126()
  shape3d_127()
  shape3d_128()
  shape3d_129()
  shape3d_130()
  shape3d_131()
  shape3d_132()
  shape3d_133()
  shape3d_134()
  shape3d_135()
  shape3d_136()
  shape3d_137()
  shape3d_138()
  shape3d_139()
  shape3d_140()
  shape3d_141()
  shape3d_142()
  shape3d_143()
  shape3d_144()
  shape3d_145()
  shape3d_146()
  shape3d_147()
  shape3d_148()
  shape3d_149()
  shape3d_150()
  shape3d_151()
  shape3d_152()
  shape3d_153()
  shape3d_154()
  shape3d_155()
  shape3d_156()
  shape3d_157()
  shape3d_158()
  shape3d_159()
  shape3d_160()
  shape3d_161()
  shape3d_162()
  shape3d_163()
  shape3d_164()
  shape3d_165()
  shape3d_166()
  shape3d_167()
  shape3d_168()
  shape3d_169()
  shape3d_170()
  shape3d_171()
  shape3d_172()
  shape3d_173()
  shape3d_174()
  shape3d_175()
  shape3d_176()
  shape3d_177()
  shape3d_178()
  shape3d_179()
  shape3d_180()
  shape3d_181()
  shape3d_182()
  shape3d_183()
  shape3d_184()
  shape3d_185()
  shape3d_186()
  shape3d_187()
  shape3d_188()
  shape3d_189()
  shape3d_190()
  shape3d_191()
  dend[123] {pt3dclear() pt3dadd(294, 370, 0, 1) pt3dadd(285, 375, 0, 1)}
  dend[124] {pt3dclear() pt3dadd(308, 408, 0, 1) pt3dadd(300, 405, 0, 1)}
  dend[125] {pt3dclear() pt3dadd(300, 405, 0, 1) pt3dadd(285, 405, 0, 1)}
}

objref all, somatic, Dendrites, Axon
proc subsets() { local i
  objref all, somatic, Dendrites, Axon
  all = new SectionList()
    soma all.append()
    for i=0, 125 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  Dendrites = new SectionList()
    for i=0, 122 dend[i] Dendrites.append()

  Axon = new SectionList()
    dend[47] Axon.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    insert pas
    g_pas = 0.0001
    e_pas = -70
  }
  forsec somatic {
    Ra = 250
    insert naf
    insert kdr
    gnabar_naf = 0.1875
    gkbar_kdr = 0.018
  }
  forsec Dendrites {
    Ra = 250
    insert cacurrent
    insert cadecay
    insert kc
    insert kahp
  }
  forsec Axon {
    Ra = 100
    insert naf
    insert kdr
    gnabar_naf = 0.4
    gkbar_kdr = 0.036
  }
}
access soma

celldef()

load_file("./frb_session.ses")