proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend[124]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  connect dend[6](0), dend[1](1)
  connect dend[7](0), dend(1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  for i = 12, 14 connect dend[i](0), dend[11](1)
  for i = 15, 16 connect dend[i](0), dend[i-1](1)
  for i = 17, 18 connect dend[i](0), dend[15](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  connect dend[21](0), dend[14](1)
  for i = 22, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[23](1)
  connect dend[30](0), dend[22](1)
  for i = 31, 33 connect dend[i](0), dend[30](1)
  connect dend[34](0), soma(0.5)
  for i = 35, 36 connect dend[i](0), dend[i-1](1)
  connect dend[37](0), dend[35](1)
  connect dend[38](0), dend[37](1)
  connect dend[39](0), dend[34](1)
  connect dend[40](0), soma(0.5)
  for i = 41, 42 connect dend[i](0), dend[40](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), soma(0.5)
  for i = 47, 48 connect dend[i](0), dend[46](1)
  for i = 49, 50 connect dend[i](0), soma(0.5)
  for i = 51, 64 connect dend[i](0), dend[i-1](1)
  connect dend[65](0), dend[63](1)
  connect dend[66](0), dend[62](1)
  connect dend[67](0), dend[61](1)
  for i = 68, 69 connect dend[i](0), dend[i-1](1)
  connect dend[70](0), dend[68](1)
  connect dend[71](0), dend[67](1)
  connect dend[72](0), dend[60](1)
  for i = 73, 74 connect dend[i](0), dend[72](1)
  for i = 75, 76 connect dend[i](0), dend[74](1)
  connect dend[77](0), dend[59](1)
  connect dend[78](0), dend[58](1)
  connect dend[79](0), dend[57](1)
  connect dend[80](0), dend[56](1)
  connect dend[81](0), dend[55](1)
  connect dend[82](0), dend[54](1)
  for i = 83, 84 connect dend[i](0), dend[i-1](1)
  connect dend[85](0), dend[83](1)
  for i = 86, 87 connect dend[i](0), dend[85](1)
  for i = 88, 89 connect dend[i](0), dend[87](1)
  for i = 90, 91 connect dend[i](0), dend[i-1](1)
  connect dend[92](0), dend[90](1)
  for i = 93, 95 connect dend[i](0), dend[i-1](1)
  connect dend[96](0), dend[94](1)
  connect dend[97](0), dend[93](1)
  connect dend[98](0), dend[92](1)
  connect dend[99](0), dend[89](1)
  for i = 100, 101 connect dend[i](0), dend[i-1](1)
  connect dend[102](0), dend[100](1)
  connect dend[103](0), dend[99](1)
  connect dend[104](0), dend[82](1)
  for i = 105, 107 connect dend[i](0), dend[i-1](1)
  for i = 108, 109 connect dend[i](0), dend[106](1)
  connect dend[110](0), dend[104](1)
  connect dend[111](0), dend[53](1)
  connect dend[112](0), dend[52](1)
  connect dend[113](0), dend[51](1)
  for i = 114, 116 connect dend[i](0), dend[i-1](1)
  connect dend[117](0), dend[115](1)
  for i = 118, 120 connect dend[i](0), dend[117](1)
  connect dend[121](0), dend[114](1)
  connect dend[122](0), dend[113](1)
  connect dend[123](0), dend[50](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(271.823, 334.848, -8.70909, 8.94976)
	pt3dadd(273.078, 340.597, -8.22015, 14.6064)
	pt3dadd(274.334, 346.347, -7.7312, 20.2858)
	pt3dadd(275.589, 352.097, -7.24225, 25.1465)
	pt3dadd(276.845, 357.847, -6.7533, 32.3824)
	pt3dadd(278.1, 363.596, -6.26436, 37.8782)
	pt3dadd(279.356, 369.346, -5.77541, 39.6592)
	pt3dadd(280.611, 375.096, -5.28646, 42.0896)
	pt3dadd(281.867, 380.846, -4.79752, 43.5279)
	pt3dadd(283.123, 386.595, -4.30857, 46.1742)
	pt3dadd(284.378, 392.345, -3.81962, 47.9088)
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  }
}
proc shape3d_71() {
  dend[45] {  }
  dend[46] {pt3dclear()
	pt3dstyle(1, 285.116, 395.725, -3.53219)
	pt3dadd(-31.63, -360.18, -17, 1.7)
	pt3dadd(-31.13, -358.17, -98.9, 2.55)
  }
  dend[47] {pt3dclear()
	pt3dadd(-31.13, -358.17, -98.9, 2.55)
	pt3dadd(-31.97, -359.59, -98.9, 2.55)
	pt3dadd(-32.33, -359.99, -98.9, 2.55)
	pt3dadd(-32.86, -360.6, -98.9, 2.55)
	pt3dadd(-33.4, -361.21, -98.9, 2.55)
	pt3dadd(-33.76, -361.61, -98.9, 2.55)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
  shape3d_72()
  shape3d_73()
  shape3d_74()
  shape3d_75()
  shape3d_76()
  shape3d_77()
  shape3d_78()
  shape3d_79()
  shape3d_80()
  shape3d_81()
  shape3d_82()
  shape3d_83()
  shape3d_84()
  shape3d_85()
  shape3d_86()
  shape3d_87()
  shape3d_88()
  shape3d_89()
  shape3d_90()
  shape3d_91()
  shape3d_92()
  shape3d_93()
  shape3d_94()
  shape3d_95()
  shape3d_96()
  shape3d_97()
  shape3d_98()
  shape3d_99()
  shape3d_100()
  shape3d_101()
  shape3d_102()
  shape3d_103()
  shape3d_104()
  shape3d_105()
  shape3d_106()
  shape3d_107()
  shape3d_108()
  shape3d_109()
  shape3d_110()
  shape3d_111()
  shape3d_112()
  shape3d_113()
  shape3d_114()
  shape3d_115()
  shape3d_116()
  shape3d_117()
  shape3d_118()
  shape3d_119()
  shape3d_120()
  shape3d_121()
  shape3d_122()
  shape3d_123()
  shape3d_124()
  shape3d_125()
  shape3d_126()
  shape3d_127()
  shape3d_128()
  shape3d_129()
  shape3d_130()
  shape3d_131()
  shape3d_132()
  shape3d_133()
  shape3d_134()
  shape3d_135()
  shape3d_136()
  shape3d_137()
  shape3d_138()
  shape3d_139()
  shape3d_140()
  shape3d_141()
  shape3d_142()
  shape3d_143()
  shape3d_144()
  shape3d_145()
  shape3d_146()
  shape3d_147()
  shape3d_148()
  shape3d_149()
  shape3d_150()
  shape3d_151()
  shape3d_152()
  shape3d_153()
  shape3d_154()
  shape3d_155()
  shape3d_156()
  shape3d_157()
  shape3d_158()
  shape3d_159()
  shape3d_160()
  shape3d_161()
  shape3d_162()
  shape3d_163()
  shape3d_164()
  shape3d_165()
  shape3d_166()
  shape3d_167()
  shape3d_168()
  shape3d_169()
  shape3d_170()
  shape3d_171()
  shape3d_172()
  shape3d_173()
  shape3d_174()
  shape3d_175()
  shape3d_176()
  shape3d_177()
  shape3d_178()
  shape3d_179()
  shape3d_180()
  shape3d_181()
  shape3d_182()
  shape3d_183()
  shape3d_184()
  shape3d_185()
  shape3d_186()
  shape3d_187()
  shape3d_188()
  shape3d_189()
  shape3d_190()
  shape3d_191()
}

objref all, somatic, Dendrites, Axon
proc subsets() { local i
  objref all, somatic, Dendrites, Axon
  all = new SectionList()
    soma all.append()
    for i=0, 123 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  Dendrites = new SectionList()
    for i=0, 123 dend[i] Dendrites.append()

  Axon = new SectionList()
    dend[46] Axon.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    cm = 0.9
    insert pas
    insert naf
    insert kdr
      g_pas = 0.001
      e_pas = -70
  }
  forsec Dendrites {
    
      gnabar_naf = 0.125
      gkbar_kdr = 0.036
  
    Ra = 250
  }
  forsec somatic {
    Ra = 250
    
      gnabar_naf = 187.5
      gkbar_kdr = 0.018
     
  }
  forsec Axon {
    Ra = 100

      gnabar_naf = 400
      gkbar_kdr = 0.036
      
  }
}
access soma

celldef()

celsius = 38

load_file("./frb_session.ses")