proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend[128]

proc topol() { local i
  for i = 0, 1 connect dend[i](0), soma(0.5)
  for i = 2, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  for i = 5, 6 connect dend[i](0), dend[4](1)
  connect dend[7](0), dend[2](1)
  connect dend[8](0), dend[1](1)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  for i = 13, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[12](1)
  for i = 16, 17 connect dend[i](0), dend[i-1](1)
  for i = 18, 19 connect dend[i](0), dend[16](1)
  for i = 20, 21 connect dend[i](0), dend[19](1)
  connect dend[22](0), dend[15](1)
  for i = 23, 26 connect dend[i](0), dend[i-1](1)
  connect dend[27](0), dend[25](1)
  for i = 28, 29 connect dend[i](0), dend[27](1)
  connect dend[30](0), dend[24](1)
  connect dend[31](0), dend[23](1)
  for i = 32, 34 connect dend[i](0), dend[31](1)
  connect dend[35](0), soma(0.5)
  for i = 36, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  connect dend[39](0), dend[38](1)
  connect dend[40](0), dend[35](1)
  connect dend[41](0), soma(0.5)
  for i = 42, 43 connect dend[i](0), dend[41](1)
  for i = 44, 45 connect dend[i](0), dend[43](1)
  for i = 46, 47 connect dend[i](0), soma(0.5)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  for i = 50, 51 connect dend[i](0), soma(0.5)
  for i = 52, 65 connect dend[i](0), dend[i-1](1)
  connect dend[66](0), dend[64](1)
  connect dend[67](0), dend[63](1)
  connect dend[68](0), dend[62](1)
  for i = 69, 70 connect dend[i](0), dend[i-1](1)
  connect dend[71](0), dend[69](1)
  connect dend[72](0), dend[68](1)
  connect dend[73](0), dend[61](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  for i = 76, 77 connect dend[i](0), dend[75](1)
  connect dend[78](0), dend[60](1)
  connect dend[79](0), dend[59](1)
  connect dend[80](0), dend[58](1)
  connect dend[81](0), dend[57](1)
  connect dend[82](0), dend[56](1)
  connect dend[83](0), dend[55](1)
  for i = 84, 85 connect dend[i](0), dend[83](1)
  for i = 86, 88 connect dend[i](0), dend[i-1](1)
  for i = 89, 90 connect dend[i](0), dend[87](1)
  connect dend[91](0), dend[85](1)
  connect dend[92](0), dend[54](1)
  connect dend[93](0), dend[53](1)
  connect dend[94](0), dend[52](1)
  for i = 95, 97 connect dend[i](0), dend[i-1](1)
  connect dend[98](0), dend[96](1)
  for i = 99, 101 connect dend[i](0), dend[98](1)
  connect dend[102](0), dend[95](1)
  connect dend[103](0), dend[94](1)
  connect dend[104](0), dend[51](1)
  connect dend[105](0), soma(0.5)
  for i = 106, 107 connect dend[i](0), dend[105](1)
  for i = 108, 109 connect dend[i](0), dend[107](1)
  for i = 110, 111 connect dend[i](0), dend[109](1)
  for i = 112, 113 connect dend[i](0), dend[i-1](1)
  connect dend[114](0), dend[112](1)
  for i = 115, 117 connect dend[i](0), dend[i-1](1)
  connect dend[118](0), dend[116](1)
  connect dend[119](0), dend[115](1)
  connect dend[120](0), dend[114](1)
  connect dend[121](0), dend[111](1)
  for i = 122, 123 connect dend[i](0), dend[i-1](1)
  connect dend[124](0), dend[122](1)
  connect dend[125](0), dend[121](1)
  connect dend[126](0), dend[105](1)
  connect dend[127](0), soma(0.5)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(67.8394, 82.8256, -9.11176, 0.528462)
	pt3dadd(68.1173, 84.3402, -8.55596, 1.05189)
	pt3dadd(68.3952, 85.8548, -8.00015, 6.62746)
	pt3dadd(68.6731, 87.3694, -7.44435, 7.8504)
	pt3dadd(68.9509, 88.884, -6.88855, 9.90808)
	pt3dadd(69.2288, 90.3986, -6.33274, 11.0731)
	pt3dadd(69.5067, 91.9132, -5.77694, 12.4403)
	pt3dadd(69.7846, 93.4278, -5.22113, 13.5051)
	pt3dadd(70.0625, 94.9424, -4.66533, 14.2402)
	pt3dadd(70.3404, 96.457, -4.10952, 14.7095)
	pt3dadd(70.6183, 97.9715, -3.55372, 14.3791)
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  }
}
proc shape3d_2() {
  dend[1] {	pt3dadd(-116.97, -288.87, -20.75, 1.7)
	pt3dadd(-116.93, -288.68, -20.75, 1.7)
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  }
}
proc shape3d_3() {
  dend[1] {	pt3dadd(-108.95, -267.41, -15.75, 1.7)
	pt3dadd(-108.86, -267.36, -15.75, 1.7)
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  }
}
proc shape3d_4() {
  dend[1] {	pt3dadd(-96, -251.45, -14.75, 1.7)
	pt3dadd(-95.96, -251.4, -14.75, 1.7)
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  }
}
proc shape3d_5() {
  dend[1] {	pt3dadd(-83.35, -231.58, -9.75, 1.7)
	pt3dadd(-83.26, -231.48, -9.75, 1.7)
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  }
}
proc shape3d_6() {
  dend[1] {	pt3dadd(-72.99, -210.36, -4.75, 1.7)
	pt3dadd(-72.9, -210.16, -4.75, 1.7)
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  }
}
proc shape3d_7() {
  dend[1] {	pt3dadd(-61.22, -189.38, -2.75, 1.7)
	pt3dadd(-61.14, -189.24, -2.75, 1.7)
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  }
}
proc shape3d_8() {
  dend[1] {	pt3dadd(-60.8, -167.54, -2.75, 1.7)
	pt3dadd(-60.85, -167.44, -2.75, 1.7)
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  }
}
proc shape3d_9() {
  dend[1] {	pt3dadd(-36.26, -152.95, -7.75, 1.7)
	pt3dadd(-36.17, -152.9, -7.75, 1.7)
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  }
}
proc shape3d_10() {
  dend[1] {	pt3dadd(-19.45, -139.57, -10.75, 1.7)
	pt3dadd(-19.36, -139.51, -10.75, 1.7)
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  }
}
proc shape3d_11() {
  dend[1] {	pt3dadd(-8.58, -123.02, -9.75, 1.7)
	pt3dadd(-8.58, -122.93, -9.75, 1.7)
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  }
}
proc shape3d_12() {
  dend[1] {	pt3dadd(0.94, -98.84, -3.75, 1.7)
	pt3dadd(0.98, -98.79, -3.75, 1.7)
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  }
}
proc shape3d_13() {
  dend[1] {	pt3dadd(12.1, -83.86, -8.75, 1.7)
	pt3dadd(12.14, -83.77, -8.75, 1.7)
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  }
}
proc shape3d_14() {
  dend[1] {	pt3dadd(28.4, -50.03, -12.8, 3.4)
	pt3dadd(28.49, -49.92, -12.8, 3.4)
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  }
}
proc shape3d_15() {
  dend[1] {	pt3dadd(41.11, -33.77, -14.9, 3.4)
	pt3dadd(41.11, -33.67, -14.9, 3.4)
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  }
}
proc shape3d_16() {
  dend[1] {	pt3dadd(50.38, -14.23, -17, 3.4)
	pt3dadd(50.38, -13.97, -17, 3.4)
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  }
}
proc shape3d_17() {
  dend[1] {	pt3dadd(58.81, 3.7, -19.1, 3.4)
	pt3dadd(58.85, 3.8, -19.1, 3.4)
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  }
}
proc shape3d_18() {
  dend[1] {	pt3dadd(63.35, 42.44, -15.95, 3.57)
	pt3dadd(63.4, 42.49, -15.95, 3.57)
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  }
}
proc shape3d_19() {
  dend[1] {	pt3dadd(68.93, 70.89, -12.8, 4.93)
	pt3dadd(68.97, 71, -12.8, 4.93)
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  }
}
proc shape3d_20() {
  dend[2] {	pt3dadd(88.72, 59.45, -17, 4.25)
	pt3dadd(88.77, 59.5, -17, 4.25)
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  }
}
proc shape3d_21() {
  dend[3] {	pt3dadd(103.08, 38.79, -30.65, 3.57)
	pt3dadd(103.12, 38.74, -30.65, 3.57)
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  }
}
proc shape3d_22() {
  dend[8] {	pt3dadd(69.15, 74.64, -11.75, 5.43)
	pt3dadd(69.11, 74.69, -11.75, 5.43)
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  }
}
proc shape3d_23() {
  dend[12] {	pt3dadd(60.63, 55.65, -9.65, 6.62)
	pt3dadd(60.59, 55.6, -9.65, 6.62)
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  }
}
proc shape3d_24() {
  dend[12] {	pt3dadd(52.48, 36.51, -11.75, 3.4)
	pt3dadd(52.43, 36.46, -11.75, 3.4)
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  }
}
proc shape3d_25() {
  dend[14] {	pt3dadd(41.33, 21.07, -14.9, 3.74)
	pt3dadd(41.29, 21.12, -14.9, 3.74)
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  }
}
proc shape3d_26() {
  dend[16] {	pt3dadd(41.4, -20.86, -10.6, 2.55)
	pt3dadd(41.35, -20.95, -10.6, 2.55)
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  }
}
proc shape3d_27() {
  dend[17] {	pt3dadd(22.83, -36.31, 2.5, 2.72)
	pt3dadd(22.88, -36.2, 6.7, 2.38)
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  }
}
proc shape3d_28() {
  dend[23] {	pt3dadd(43.25, 7.45, -3.35, 2.89)
	pt3dadd(43.16, 7.39, -3.35, 2.89)
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  }
}
proc shape3d_29() {
  dend[23] {	pt3dadd(34.38, -14.84, -1.25, 2.38)
	pt3dadd(34.33, -14.94, -1.25, 2.38)
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  }
}
proc shape3d_30() {
  dend[24] {	pt3dadd(39.24, -42.53, 0.85, 3.57)
	pt3dadd(39.28, -42.58, 0.85, 3.57)
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  }
}
proc shape3d_31() {
  dend[24] {	pt3dadd(65.45, 14.18, 4, 2.89)
	pt3dadd(65.5, 14.28, 4, 2.89)
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  }
}
proc shape3d_32() {
  dend[24] {	pt3dadd(72.81, 36.36, 4, 2.89)
	pt3dadd(72.89, 36.46, 4, 2.89)
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  }
}
proc shape3d_33() {
  dend[24] {	pt3dadd(83.19, 51.4, 4, 3.23)
	pt3dadd(83.24, 51.45, 4, 3.23)
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  }
}
proc shape3d_34() {
  dend[26] {	pt3dadd(78.47, 88.97, 17.65, 11.38)
	pt3dadd(78.38, 89.07, 17.65, 11.38)
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  }
}
proc shape3d_35() {
  dend[30] {	pt3dadd(87.16, 73.83, 4, 3.57)
	pt3dadd(87.21, 73.88, 4, 3.57)
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  }
}
proc shape3d_36() {
  dend[31] {	pt3dadd(19.04, -41.97, 0.85, 2.21)
	pt3dadd(18.95, -42.03, 0.85, 2.21)
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  }
}
proc shape3d_37() {
  dend[33] {	pt3dadd(2.34, -55.65, 13.7, 1.87)
	pt3dadd(2.25, -55.75, 13.7, 1.87)
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  }
}
proc shape3d_38() {
  dend[33] {	pt3dadd(-23.23, -68.72, 15.7, 1.53)
	pt3dadd(-23.31, -68.82, 15.7, 1.53)
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  }
}
proc shape3d_39() {
  dend[36] {	pt3dadd(52.97, 80.92, -57.75, 6.79)
	pt3dadd(52.88, 80.82, -57.75, 6.79)
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  }
}
proc shape3d_40() {
  dend[37] {	pt3dadd(28.72, 80.16, -56.7, 4.42)
	pt3dadd(28.67, 80.26, -56.7, 4.42)
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  }
}
proc shape3d_41() {
  dend[39] {	pt3dadd(46.15, 70.89, -63, 4.59)
	pt3dadd(46.06, 70.84, -63, 4.59)
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  }
}
proc shape3d_42() {
  dend[39] {	pt3dadd(35.98, 54.79, -63, 4.25)
	pt3dadd(35.89, 54.74, -63, 4.25)
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  }
}
proc shape3d_43() {
  dend[39] {	pt3dadd(19.53, 42.49, -63, 4.08)
	pt3dadd(19.4, 42.44, -63, 4.08)
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  }
}
proc shape3d_44() {
  dend[39] {	pt3dadd(7.05, 29.58, -65.1, 3.4)
	pt3dadd(7, 29.52, -65.1, 3.4)
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  }
}
proc shape3d_45() {
  dend[39] {	pt3dadd(-1.2, 13.17, -68.25, 2.89)
	pt3dadd(-1.25, 13.12, -68.25, 2.89)
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  }
}
proc shape3d_46() {
  dend[39] {	pt3dadd(-12.12, -0.15, -68.25, 3.4)
	pt3dadd(-12.21, -0.2, -68.25, 3.4)
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  }
}
proc shape3d_47() {
  dend[39] {	pt3dadd(-25.5, -9.92, -58.8, 3.4)
	pt3dadd(-25.58, -9.92, -58.8, 3.4)
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  }
}
proc shape3d_48() {
  dend[40] {	pt3dadd(49.13, 90.04, -24.15, 3.57)
	pt3dadd(49.04, 90.14, -24.15, 3.57)
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  }
}
proc shape3d_49() {
  dend[40] {	pt3dadd(26.67, 99.56, -21, 3.06)
	pt3dadd(26.62, 99.61, -21, 3.06)
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  }
}
proc shape3d_50() {
  dend[40] {	pt3dadd(3.04, 101.73, -22.05, 3.06)
	pt3dadd(2.99, 101.68, -22.05, 3.06)
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  }
}
proc shape3d_51() {
  dend[40] {	pt3dadd(-17.47, 93.58, -27.3, 2.55)
	pt3dadd(-17.52, 93.53, -27.3, 2.55)
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  }
}
proc shape3d_52() {
  dend[40] {	pt3dadd(-44.09, 92.67, -30.45, 2.55)
	pt3dadd(-44.18, 92.72, -30.45, 2.55)
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  }
}
proc shape3d_53() {
  dend[42] {	pt3dadd(58.99, 83.25, -18.9, 6.28)
	pt3dadd(58.99, 83.15, -18.9, 6.28)
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  }
}
proc shape3d_54() {
  dend[42] {	pt3dadd(48.78, 65.17, -22.05, 4.25)
	pt3dadd(48.73, 65.07, -22.05, 4.25)
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  }
}
proc shape3d_55() {
  dend[42] {	pt3dadd(37.41, 42.38, -22.05, 4.25)
	pt3dadd(37.37, 42.28, -22.05, 4.25)
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  }
}
proc shape3d_56() {
  dend[42] {	pt3dadd(24.79, 25.37, -17.85, 4.25)
	pt3dadd(24.75, 25.32, -17.85, 4.25)
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  }
}
proc shape3d_57() {
  dend[42] {	pt3dadd(11.46, 9.57, -15.75, 3.4)
	pt3dadd(11.46, 9.47, -15.75, 3.4)
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  }
}
proc shape3d_58() {
  dend[42] {	pt3dadd(-8.84, -37.87, -15.75, 2.38)
	pt3dadd(-8.88, -37.97, -15.75, 2.38)
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  }
}
proc shape3d_59() {
  dend[42] {	pt3dadd(-18.02, -61.81, -15.75, 2.38)
	pt3dadd(-18.15, -61.92, -15.75, 2.38)
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  }
}
proc shape3d_60() {
  dend[43] {	pt3dadd(61.17, 59.1, -57.75, 3.06)
	pt3dadd(61.17, 58.99, -57.75, 3.06)
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  }
}
proc shape3d_61() {
  dend[44] {	pt3dadd(53.1, 39.65, -54.6, 3.06)
	pt3dadd(53.06, 39.6, -54.6, 3.06)
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  }
}
proc shape3d_62() {
  dend[44] {	pt3dadd(26.31, -0.5, -60.9, 2.72)
	pt3dadd(26.13, -0.91, -60.9, 2.72)
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  }
}
proc shape3d_63() {
  dend[45] {	pt3dadd(58.87, 41.15, -6.3, 2.16)
	pt3dadd(58.88, 41.09, -6.3, 2.16)
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  }
}
proc shape3d_64() {
  dend[45] {	pt3dadd(70.63, 38.66, -13.65, 2.23)
	pt3dadd(70.7, 38.66, -13.65, 2.23)
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  }
}
proc shape3d_65() {
  dend[45] {	pt3dadd(89.25, 16.01, -15.75, 1.81)
	pt3dadd(89.32, 15.93, -15.75, 1.81)
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  }
}
proc shape3d_66() {
  dend[46] {	pt3dadd(47.53, 102.19, -28.35, 4.08)
	pt3dadd(47.49, 102.24, -28.35, 4.08)
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  }
}
proc shape3d_67() {
  dend[46] {	pt3dadd(35.67, 120.42, -26.25, 3.91)
	pt3dadd(35.63, 120.52, -26.25, 3.91)
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  }
}
proc shape3d_68() {
  dend[46] {	pt3dadd(25.42, 136.06, -25.2, 3.57)
	pt3dadd(25.37, 136.11, -25.2, 3.57)
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  }
}
proc shape3d_69() {
  dend[46] {	pt3dadd(11.24, 148.21, -37.8, 3.57)
	pt3dadd(11.19, 148.27, -37.8, 3.57)
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  }
}
proc shape3d_70() {
  dend[46] {	pt3dadd(-1.07, 167.66, -38.85, 3.57)
	pt3dadd(-1.07, 167.76, -38.85, 3.57)
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  }
}
proc shape3d_71() {
  dend[46] {	pt3dadd(17.22, 203.71, -33.6, 3.06)
	pt3dadd(16.92, 203.71, -33.6, 3.06)
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  }
}
proc shape3d_72() {
  dend[48] {	pt3dadd(-23.73, -103.57, -103.1, 0.9)
	pt3dadd(-23.91, -103.57, -103.1, 0.9)
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  }
}
proc shape3d_73() {
  dend[49] {	pt3dadd(3.02, -74.56, -98.9, 0.9)
	pt3dadd(3.11, -74.5, -98.9, 0.9)
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  }
}
proc shape3d_74() {
  dend[49] {	pt3dadd(15.68, -54.55, -93.65, 0.9)
	pt3dadd(15.77, -54.4, -93.65, 0.9)
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  }
}
proc shape3d_75() {
  dend[49] {	pt3dadd(24.82, -34.2, -88.4, 0.9)
	pt3dadd(24.86, -34.15, -88.4, 0.9)
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  }
}
proc shape3d_76() {
  dend[49] {	pt3dadd(35.88, -13.59, -86.3, 0.9)
	pt3dadd(35.92, -13.49, -86.3, 0.9)
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  }
}
proc shape3d_77() {
  dend[49] {	pt3dadd(46.58, 6.06, -83.15, 0.9)
	pt3dadd(46.62, 6.16, -83.15, 0.9)
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  }
}
proc shape3d_78() {
  dend[49] {	pt3dadd(53.04, 32.74, -71.6, 0.9)
	pt3dadd(53.08, 32.85, -71.6, 0.9)
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  }
}
proc shape3d_79() {
  dend[49] {	pt3dadd(66.46, 54.26, -59, 0.9)
	pt3dadd(66.5, 54.37, -59, 0.9)
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  }
}
proc shape3d_80() {
  dend[49] {	pt3dadd(76.13, 79.33, -53.75, 0.9)
	pt3dadd(76.04, 79.43, -53.75, 0.9)
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  }
}
proc shape3d_81() {
  dend[50] {	pt3dadd(53.5, 84.19, 9.3, 3.48)
	pt3dadd(53.47, 84.11, 9.3, 3.48)
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  }
}
proc shape3d_82() {
  dend[50] {	pt3dadd(41.62, 68.88, 22.3, 3.48)
	pt3dadd(41.55, 68.88, 22.3, 3.48)
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  }
}
proc shape3d_83() {
  dend[55] {	pt3dadd(80.03, 134.07, 12.3, 8.92)
	pt3dadd(80.03, 134.15, 12.3, 8.92)
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  }
}
proc shape3d_84() {
  dend[56] {	pt3dadd(88.81, 194.69, 29.3, 8.92)
	pt3dadd(88.88, 194.85, 29.3, 8.92)
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  }
}
proc shape3d_85() {
  dend[62] {	pt3dadd(193.32, 582.26, 117.55, 5.77)
	pt3dadd(193.4, 582.46, 117.55, 5.77)
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  }
}
proc shape3d_86() {
  dend[62] {	pt3dadd(207.16, 610.33, 117.55, 5.77)
	pt3dadd(207.24, 610.52, 117.55, 5.77)
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  }
}
proc shape3d_87() {
  dend[64] {	pt3dadd(221.56, 988.8, 117.55, 4.76)
	pt3dadd(219.44, 991.84, 117.55, 4.76)
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  }
}
proc shape3d_88() {
  dend[65] {	pt3dadd(204.88, 1050.53, 117.55, 1.7)
	pt3dadd(204.96, 1050.63, 117.55, 1.7)
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  }
}
proc shape3d_89() {
  dend[65] {	pt3dadd(215.49, 1097.41, 117.55, 1.7)
	pt3dadd(215.58, 1097.51, 117.55, 1.7)
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  }
}
proc shape3d_90() {
  dend[65] {	pt3dadd(219.74, 1155.57, 117.55, 2.72)
	pt3dadd(219.57, 1155.57, 117.55, 2.72)
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  }
}
proc shape3d_91() {
  dend[65] {	pt3dadd(225.43, 1223.56, 117.55, 2.38)
	pt3dadd(225.43, 1223.85, 117.55, 2.38)
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  }
}
proc shape3d_92() {
  dend[65] {	pt3dadd(239.35, 1258.09, 117.55, 1.36)
	pt3dadd(239.52, 1258.19, 117.55, 1.36)
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  }
}
proc shape3d_93() {
  dend[65] {	pt3dadd(261.27, 1277.09, 117.55, 1.02)
	pt3dadd(261.35, 1277.19, 117.55, 1.02)
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  }
}
proc shape3d_94() {
  dend[66] {	pt3dadd(184.5, 1050.15, 117.55, 2.04)
	pt3dadd(184.41, 1050.24, 117.55, 2.04)
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  }
}
proc shape3d_95() {
  dend[66] {	pt3dadd(155.88, 1062.59, 117.55, 2.72)
	pt3dadd(155.79, 1062.69, 117.55, 2.72)
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  }
}
proc shape3d_96() {
  dend[66] {	pt3dadd(127.69, 1074.55, 117.55, 3.06)
	pt3dadd(127.6, 1074.45, 117.55, 3.06)
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  }
}
proc shape3d_97() {
  dend[66] {	pt3dadd(87.52, 1074.74, 117.55, 2.72)
	pt3dadd(87.35, 1074.65, 117.55, 2.72)
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  }
}
proc shape3d_98() {
  dend[69] {	pt3dadd(218.45, 670.13, 117.55, 6.11)
	pt3dadd(218.54, 670.22, 117.55, 6.11)
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  }
}
proc shape3d_99() {
  dend[69] {	pt3dadd(229.66, 714.4, 117.55, 4.76)
	pt3dadd(229.66, 714.5, 117.55, 4.76)
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  }
}
proc shape3d_100() {
  dend[69] {	pt3dadd(245.03, 741.6, 117.55, 6.45)
	pt3dadd(245.12, 741.7, 117.55, 6.45)
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  }
}
proc shape3d_101() {
  dend[69] {	pt3dadd(257.09, 780.66, 117.55, 6.11)
	pt3dadd(257.09, 780.85, 117.55, 6.11)
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  }
}
proc shape3d_102() {
  dend[69] {	pt3dadd(269.91, 811.43, 117.55, 5.43)
	pt3dadd(270, 811.53, 117.55, 5.43)
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  }
}
proc shape3d_103() {
  dend[69] {	pt3dadd(274.5, 878.75, 117.55, 5.43)
	pt3dadd(274.58, 878.95, 117.55, 5.43)
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  }
}
proc shape3d_104() {
  dend[70] {	pt3dadd(288.86, 962.09, 117.55, 3.74)
	pt3dadd(288.78, 961.8, 117.55, 3.74)
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  }
}
proc shape3d_105() {
  dend[70] {	pt3dadd(299.56, 995.94, 117.55, 3.06)
	pt3dadd(299.56, 997, 117.55, 3.06)
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  }
}
proc shape3d_106() {
  dend[70] {	pt3dadd(310.94, 1033.75, 117.55, 4.76)
	pt3dadd(310.94, 1036.35, 117.55, 4.76)
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  }
}
proc shape3d_107() {
  dend[70] {	pt3dadd(323.77, 1068.28, 117.55, 4.42)
	pt3dadd(323.85, 1068.47, 117.55, 4.42)
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  }
}
proc shape3d_108() {
  dend[70] {	pt3dadd(335.74, 1093.36, 117.55, 3.74)
	pt3dadd(335.82, 1093.45, 117.55, 3.74)
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  }
}
proc shape3d_109() {
  dend[70] {	pt3dadd(346.69, 1123.55, 117.55, 3.74)
	pt3dadd(346.69, 1124.32, 117.55, 3.74)
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  }
}
proc shape3d_110() {
  dend[70] {	pt3dadd(354.93, 1175.15, 117.55, 4.76)
	pt3dadd(355.02, 1175.24, 117.55, 4.76)
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  }
}
proc shape3d_111() {
  dend[70] {	pt3dadd(365.46, 1213.44, 117.55, 3.06)
	pt3dadd(365.55, 1213.54, 117.55, 3.06)
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  }
}
proc shape3d_112() {
  dend[70] {	pt3dadd(380.23, 1238.23, 117.55, 3.74)
	pt3dadd(380.32, 1238.32, 117.55, 3.74)
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  }
}
proc shape3d_113() {
  dend[70] {	pt3dadd(392.89, 1279.22, 117.55, 2.38)
	pt3dadd(392.97, 1279.31, 117.55, 2.38)
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  }
}
proc shape3d_114() {
  dend[70] {	pt3dadd(405.63, 1312.78, 117.55, 2.72)
	pt3dadd(405.71, 1312.88, 117.55, 2.72)
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  }
}
proc shape3d_115() {
  dend[72] {	pt3dadd(255.83, 680.09, 117.55, 6.11)
	pt3dadd(256, 680.29, 117.55, 6.11)
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  }
}
proc shape3d_116() {
  dend[72] {	pt3dadd(283.43, 699.48, 117.55, 4.42)
	pt3dadd(283.6, 699.58, 117.55, 4.42)
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  }
}
proc shape3d_117() {
  dend[72] {	pt3dadd(306.1, 726.15, 117.55, 4.42)
	pt3dadd(306.19, 726.25, 117.55, 4.42)
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  }
}
proc shape3d_118() {
  dend[72] {	pt3dadd(331.07, 754.32, 117.55, 3.4)
	pt3dadd(331.07, 754.51, 117.55, 3.4)
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  }
}
proc shape3d_119() {
  dend[72] {	pt3dadd(357.82, 779.63, 117.55, 3.4)
	pt3dadd(357.99, 779.73, 117.55, 3.4)
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  }
}
proc shape3d_120() {
  dend[72] {	pt3dadd(383.46, 805.24, 117.55, 3.4)
	pt3dadd(383.55, 805.34, 117.55, 3.4)
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  }
}
proc shape3d_121() {
  dend[72] {	pt3dadd(399.34, 845.84, 117.55, 4.08)
	pt3dadd(399.43, 846.04, 117.55, 4.08)
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  }
}
proc shape3d_122() {
  dend[72] {	pt3dadd(460.8, 1018.99, 117.55, 4.2)
	pt3dadd(460.88, 1019.18, 117.55, 4.2)
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  }
}
proc shape3d_123() {
  dend[75] {	pt3dadd(367.56, 902.85, 117.55, 2.38)
	pt3dadd(368.15, 909.17, 117.55, 2.72)
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  }
}
proc shape3d_124() {
  dend[82] {	pt3dadd(95.99, 239.96, 39.3, 8.92)
	pt3dadd(95.99, 240.12, 39.3, 8.92)
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  }
}
proc shape3d_125() {
  dend[83] {	pt3dadd(74.68, 126.29, 9.3, 3.07)
	pt3dadd(74.64, 126.21, 9.3, 3.07)
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  }
}
proc shape3d_126() {
  dend[86] {	pt3dadd(64.83, 114.09, -19.7, 5.1)
	pt3dadd(64.74, 114.14, -19.7, 5.1)
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  }
}
proc shape3d_127() {
  dend[89] {	pt3dadd(67.19, 127, -30.2, 3.91)
	pt3dadd(67.24, 127.05, -30.2, 3.91)
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  }
}
proc shape3d_128() {
  dend[89] {	pt3dadd(82.13, 138.9, -40.7, 3.74)
	pt3dadd(82.17, 138.95, -40.7, 3.74)
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  }
}
proc shape3d_129() {
  dend[89] {	pt3dadd(93.4, 154.45, -50.15, 3.57)
	pt3dadd(93.49, 154.54, -50.15, 3.57)
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  }
}
proc shape3d_130() {
  dend[91] {	pt3dadd(41.87, 132.01, 49.2, 4.08)
	pt3dadd(41.82, 131.76, 52.35, 4.08)
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  }
}
proc shape3d_131() {
  dend[92] {	pt3dadd(75.85, 137.32, 11.3, 4.04)
	pt3dadd(75.89, 137.43, 11.3, 4.04)
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  }
}
proc shape3d_132() {
  dend[92] {	pt3dadd(72.43, 172.49, 14.3, 3.9)
	pt3dadd(72.33, 172.38, 14.3, 3.9)
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  }
}
proc shape3d_133() {
  dend[92] {	pt3dadd(68.32, 202.61, 16.3, 3.9)
	pt3dadd(68.32, 202.76, 16.3, 3.9)
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  }
}
proc shape3d_134() {
  dend[92] {	pt3dadd(60.8, 223.1, 18.3, 3.9)
	pt3dadd(60.76, 223.18, 18.3, 3.9)
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  }
}
proc shape3d_135() {
  dend[92] {	pt3dadd(52.19, 251.12, 28.3, 3.9)
	pt3dadd(52.16, 251.24, 28.3, 3.9)
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  }
}
proc shape3d_136() {
  dend[94] {	pt3dadd(81.74, 102.65, -1.7, 5.43)
	pt3dadd(81.84, 102.65, -1.7, 5.43)
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  }
}
proc shape3d_137() {
  dend[96] {	pt3dadd(100.95, 110.75, 13.9, 1.7)
	pt3dadd(100.97, 110.77, 13.9, 1.7)
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  }
}
proc shape3d_138() {
  dend[97] {	pt3dadd(106.02, 123.39, 15.9, 1.87)
	pt3dadd(106.06, 123.46, 15.9, 1.87)
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  }
}
proc shape3d_139() {
  dend[97] {	pt3dadd(112.39, 139.47, 21.9, 2.04)
	pt3dadd(112.43, 139.57, 21.9, 2.04)
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  }
}
proc shape3d_140() {
  dend[97] {	pt3dadd(122.15, 160.78, 26.9, 2.04)
	pt3dadd(122.2, 160.83, 26.9, 2.04)
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  }
}
proc shape3d_141() {
  dend[97] {	pt3dadd(132.85, 181.9, 36.9, 2.04)
	pt3dadd(132.94, 182.15, 36.9, 2.04)
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  }
}
proc shape3d_142() {
  dend[97] {	pt3dadd(143.77, 202.6, 39.9, 2.04)
	pt3dadd(143.81, 202.64, 39.9, 2.04)
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  }
}
proc shape3d_143() {
  dend[97] {	pt3dadd(156.38, 220.2, 42.9, 2.04)
	pt3dadd(156.42, 220.29, 42.9, 2.04)
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  }
}
proc shape3d_144() {
  dend[99] {	pt3dadd(105.26, 100.72, 96.55, 2.38)
	pt3dadd(105.17, 100.67, 96.55, 2.38)
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  }
}
proc shape3d_145() {
  dend[99] {	pt3dadd(95.81, 76.72, 96.55, 2.21)
	pt3dadd(95.77, 76.57, 96.55, 2.21)
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  }
}
proc shape3d_146() {
  dend[99] {	pt3dadd(86.23, 55.55, 98.65, 2.21)
	pt3dadd(86.23, 55.45, 98.65, 2.21)
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  }
}
proc shape3d_147() {
  dend[99] {	pt3dadd(74.46, 36.21, 100.75, 2.21)
	pt3dadd(74.41, 36.16, 100.75, 2.21)
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  }
}
proc shape3d_148() {
  dend[99] {	pt3dadd(64.92, 17.37, 98.65, 2.21)
	pt3dadd(64.92, 17.27, 98.65, 2.21)
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  }
}
proc shape3d_149() {
  dend[102] {	pt3dadd(99.12, 111.44, -4.7, 3.62)
	pt3dadd(99.12, 111.56, -4.7, 3.62)
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  }
}
proc shape3d_150() {
  dend[102] {	pt3dadd(105.01, 127.78, -4.7, 3.62)
	pt3dadd(105.04, 127.86, -4.7, 3.62)
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  }
}
proc shape3d_151() {
  dend[102] {	pt3dadd(110.2, 145.82, -4.7, 3.07)
	pt3dadd(110.24, 145.87, -4.7, 3.07)
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  }
}
proc shape3d_152() {
  dend[102] {	pt3dadd(117.62, 161.06, -4.7, 3.07)
	pt3dadd(117.65, 161.14, -4.7, 3.07)
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  }
}
proc shape3d_153() {
  dend[102] {	pt3dadd(124.49, 176.89, -4.7, 3.07)
	pt3dadd(124.52, 176.96, -4.7, 3.07)
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  }
}
proc shape3d_154() {
  dend[102] {	pt3dadd(136.61, 189.43, -4.7, 3.07)
	pt3dadd(136.64, 189.47, -4.7, 3.07)
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  }
}
proc shape3d_155() {
  dend[102] {	pt3dadd(156.12, 193.15, -9.7, 3.07)
	pt3dadd(156.15, 193.07, -9.7, 3.07)
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  }
}
proc shape3d_156() {
  dend[103] {	pt3dadd(98.08, 102.06, -6.7, 4.74)
	pt3dadd(98.11, 102.02, -6.7, 4.74)
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  }
}
proc shape3d_157() {
  dend[103] {	pt3dadd(105.74, 81.88, -11.7, 3.76)
	pt3dadd(105.78, 81.76, -11.7, 3.76)
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  }
}
proc shape3d_158() {
  dend[108] {	pt3dadd(63.53, 43.44, 0.3, 3.9)
	pt3dadd(63.5, 43.24, 0.3, 3.9)
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  }
}
proc shape3d_159() {
  dend[108] {	pt3dadd(58.83, 13.13, 3.3, 3.9)
	pt3dadd(58.79, 13.09, 3.3, 3.9)
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  }
}
proc shape3d_160() {
  dend[110] {	pt3dadd(53.92, 50.83, 15.3, 3.9)
	pt3dadd(53.88, 50.79, 15.3, 3.9)
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  }
}
proc shape3d_161() {
  dend[110] {	pt3dadd(39.98, 37.7, 26.3, 3.76)
	pt3dadd(39.95, 37.58, 26.3, 3.76)
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  }
}
proc shape3d_162() {
  dend[110] {	pt3dadd(28, 22.7, 36.3, 3.62)
	pt3dadd(27.96, 22.66, 36.3, 3.62)
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  }
}
proc shape3d_163() {
  dend[112] {	pt3dadd(48.06, 58.87, -4.7, 7.53)
	pt3dadd(47.99, 58.79, -4.7, 7.53)
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  }
}
proc shape3d_164() {
  dend[113] {	pt3dadd(33.85, 29.75, -6.7, 3.9)
	pt3dadd(33.78, 29.51, -6.7, 3.9)
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  }
}
proc shape3d_165() {
  dend[115] {	pt3dadd(38.31, 53.49, -3.7, 5.85)
	pt3dadd(38.24, 53.41, -3.7, 5.85)
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  }
}
proc shape3d_166() {
  dend[116] {	pt3dadd(29.15, 30.02, -5.7, 3.76)
	pt3dadd(29.11, 29.94, -5.7, 3.76)
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  }
}
proc shape3d_167() {
  dend[116] {	pt3dadd(18.21, 14.19, -5.7, 3.76)
	pt3dadd(18.17, 14.07, -5.7, 3.76)
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  }
}
proc shape3d_168() {
  dend[116] {	pt3dadd(7.79, -3.45, -5.7, 3.76)
	pt3dadd(7.76, -3.49, -5.7, 3.76)
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  }
}
proc shape3d_169() {
  dend[116] {	pt3dadd(-6.6, -20.94, -4.7, 3.76)
	pt3dadd(-6.67, -21.02, -4.7, 3.76)
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  }
}
proc shape3d_170() {
  dend[116] {	pt3dadd(-15.69, -36.18, -3.7, 3.76)
	pt3dadd(-15.73, -36.3, -3.7, 3.76)
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  }
}
proc shape3d_171() {
  dend[117] {	pt3dadd(-27.1, -55.6, -14.7, 2.89)
	pt3dadd(-27.15, -55.7, -14.7, 2.89)
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  }
}
proc shape3d_172() {
  dend[117] {	pt3dadd(-35.22, -77.82, -19.95, 2.55)
	pt3dadd(-35.26, -77.88, -19.95, 2.55)
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  }
}
proc shape3d_173() {
  dend[117] {	pt3dadd(-43.91, -98.79, -25.2, 2.04)
	pt3dadd(-43.96, -98.89, -25.2, 2.04)
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  }
}
proc shape3d_174() {
  dend[118] {	pt3dadd(-31.19, -62.81, -3.7, 3.76)
	pt3dadd(-31.26, -62.85, -3.7, 3.76)
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  }
}
proc shape3d_175() {
  dend[118] {	pt3dadd(-43.32, -75.35, -3.7, 3.76)
	pt3dadd(-43.39, -75.47, -3.7, 3.76)
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  }
}
proc shape3d_176() {
  dend[118] {	pt3dadd(-53.46, -92.8, -9.7, 3.76)
	pt3dadd(-53.49, -92.84, -9.7, 3.76)
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  }
}
proc shape3d_177() {
  dend[119] {	pt3dadd(25.8, 37.15, -4.7, 3.34)
	pt3dadd(25.73, 37.1, -4.7, 3.34)
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  }
}
proc shape3d_178() {
  dend[120] {	pt3dadd(25.63, 50.96, 0.3, 4.74)
	pt3dadd(25.56, 50.88, 0.3, 4.74)
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  }
}
proc shape3d_179() {
  dend[120] {	pt3dadd(6.12, 25.08, 0.3, 4.18)
	pt3dadd(5.98, 24.92, 0.3, 4.18)
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  }
}
proc shape3d_180() {
  dend[120] {	pt3dadd(-15.69, 1.65, 0.3, 4.18)
	pt3dadd(-15.83, 1.57, 0.3, 4.18)
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  }
}
proc shape3d_181() {
  dend[120] {	pt3dadd(-39.17, -15.05, 4.3, 4.18)
	pt3dadd(-39.38, -15.13, 4.3, 4.18)
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  }
}
proc shape3d_182() {
  dend[120] {	pt3dadd(-66.69, -30.16, 5.3, 3.62)
	pt3dadd(-66.63, -30.16, 8.3, 3.62)
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  }
}
proc shape3d_183() {
  dend[120] {	pt3dadd(-99.3, -47.81, 16.3, 3.34)
	pt3dadd(-99.37, -47.97, 16.3, 3.34)
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  }
}
proc shape3d_184() {
  dend[122] {	pt3dadd(39.67, 73.51, 16.3, 3.9)
	pt3dadd(39.63, 73.55, 16.3, 3.9)
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  }
}
proc shape3d_185() {
  dend[123] {	pt3dadd(28.76, 93.65, 29.3, 3.9)
	pt3dadd(28.66, 93.69, 29.3, 3.9)
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  }
}
proc shape3d_186() {
  dend[123] {	pt3dadd(11.87, 107.93, 39.3, 3.9)
	pt3dadd(11.83, 108.01, 39.3, 3.9)
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  }
}
proc shape3d_187() {
  dend[123] {	pt3dadd(-0.68, 118.34, 46.3, 3.62)
	pt3dadd(-0.71, 118.38, 46.3, 3.62)
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  }
}
proc shape3d_188() {
  dend[123] {	pt3dadd(-20.98, 123.36, 48.3, 4.08)
	pt3dadd(-21.83, 123.36, 48.3, 4.08)
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  }
}
proc shape3d_189() {
  dend[124] {	pt3dadd(46.59, 64.81, -7.35, 2.23)
	pt3dadd(46.67, 64.73, -7.35, 2.23)
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  }
}
proc shape3d_190() {
  dend[124] {	pt3dadd(59.28, 51.06, -11.55, 2.23)
	pt3dadd(59.36, 51.06, -11.55, 2.23)
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  }
}
proc shape3d_191() {
  dend[127] {	pt3dadd(77.89, 57.8, 17.3, 3.07)
	pt3dadd(77.96, 57.56, 17.3, 3.07)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
  shape3d_72()
  shape3d_73()
  shape3d_74()
  shape3d_75()
  shape3d_76()
  shape3d_77()
  shape3d_78()
  shape3d_79()
  shape3d_80()
  shape3d_81()
  shape3d_82()
  shape3d_83()
  shape3d_84()
  shape3d_85()
  shape3d_86()
  shape3d_87()
  shape3d_88()
  shape3d_89()
  shape3d_90()
  shape3d_91()
  shape3d_92()
  shape3d_93()
  shape3d_94()
  shape3d_95()
  shape3d_96()
  shape3d_97()
  shape3d_98()
  shape3d_99()
  shape3d_100()
  shape3d_101()
  shape3d_102()
  shape3d_103()
  shape3d_104()
  shape3d_105()
  shape3d_106()
  shape3d_107()
  shape3d_108()
  shape3d_109()
  shape3d_110()
  shape3d_111()
  shape3d_112()
  shape3d_113()
  shape3d_114()
  shape3d_115()
  shape3d_116()
  shape3d_117()
  shape3d_118()
  shape3d_119()
  shape3d_120()
  shape3d_121()
  shape3d_122()
  shape3d_123()
  shape3d_124()
  shape3d_125()
  shape3d_126()
  shape3d_127()
  shape3d_128()
  shape3d_129()
  shape3d_130()
  shape3d_131()
  shape3d_132()
  shape3d_133()
  shape3d_134()
  shape3d_135()
  shape3d_136()
  shape3d_137()
  shape3d_138()
  shape3d_139()
  shape3d_140()
  shape3d_141()
  shape3d_142()
  shape3d_143()
  shape3d_144()
  shape3d_145()
  shape3d_146()
  shape3d_147()
  shape3d_148()
  shape3d_149()
  shape3d_150()
  shape3d_151()
  shape3d_152()
  shape3d_153()
  shape3d_154()
  shape3d_155()
  shape3d_156()
  shape3d_157()
  shape3d_158()
  shape3d_159()
  shape3d_160()
  shape3d_161()
  shape3d_162()
  shape3d_163()
  shape3d_164()
  shape3d_165()
  shape3d_166()
  shape3d_167()
  shape3d_168()
  shape3d_169()
  shape3d_170()
  shape3d_171()
  shape3d_172()
  shape3d_173()
  shape3d_174()
  shape3d_175()
  shape3d_176()
  shape3d_177()
  shape3d_178()
  shape3d_179()
  shape3d_180()
  shape3d_181()
  shape3d_182()
  shape3d_183()
  shape3d_184()
  shape3d_185()
  shape3d_186()
  shape3d_187()
  shape3d_188()
  shape3d_189()
  shape3d_190()
  shape3d_191()
}

objref all, Soma, Dendrites, Axon
proc subsets() { local i
  objref all, Soma, Dendrites, Axon
  all = new SectionList()
    soma all.append()
    for i=0, 127 dend[i] all.append()

  Soma = new SectionList()
    soma Soma.append()

  Dendrites = new SectionList()
    for i=0, 48 dend[i] Dendrites.append()
    for i=50, 127 dend[i] Dendrites.append()

  Axon = new SectionList()
    dend[49] Axon.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    cm = 0.9
    insert pas
    insert naf
    insert kdr
    insert kaf   // kaf.mod uses Siemens*/
      g_pas = 0.0001
      e_pas = -70
  }
  forsec Dendrites {
    Ra = 250
      insert nap
      insert cacurrent
      insert cadecay
      insert kahp
      gnabar_naf = 6.25
      gnabar_nap = 0.0000032 // nap.mod uses Siemens
      gkbar_kdr = 0.0
      gkbar_kaf = 2//0.002 // Siemens
      gkbar_kahp = 0.1
      gca_cacurrent = 0.5
  
    
  }
  forsec Soma {
    Ra = 250
      insert kahp
      insert kc
      insert cacurrent
      insert cadecay
      gnabar_naf = 187.5
      gkbar_kdr = 125.0
      gkbar_kaf = 30//0.030 // Siemens
      gkbar_kc = 12.0
      gkbar_kahp = 0.1
      gca_cacurrent = 0.5
      
     
  }
  forsec Axon {
    Ra = 100

      gnabar_naf = 400.0
      gkbar_kdr = 400.0
      gkbar_kaf = 2//0.002 // Siemens
      
  }
}
access soma

/***********************************
tau_m function table for kaf ******/

    objref kaf_taum, kaf_vtau, file
    
    kaf_vtau = new Vector(11,0)
    kaf_taum = new Vector(11,0)

    file = new File()
    file.ropen("./kaf_vtau.dat")
    kaf_vtau.scanf(file)
    file.close()

    file.ropen("./kaf_taum.dat")
    kaf_taum.scanf(file)
    file.close()



    table_taum_kaf(kaf_taum, kaf_vtau)
    
/***********************************
tau_h function table for nap ******/
    
    objref nap_tauh, nap_vtau, file
    
    nap_vtau = new Vector(15,0)
    nap_tauh = new Vector(15,0)

    file = new File()
    file.ropen("./nap_vtau.dat")
    nap_vtau.scanf(file)
    file.close()

    file.ropen("./nap_tauh.dat")
    nap_tauh.scanf(file)
    file.close()


    table_tauh_nap(nap_tauh, nap_vtau)

/**********************************/

celldef()

celsius = 38

load_file("./frb_session.ses")